CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', 'âx80x94', 'Use regular expressions to match and name metadata in the file and path names. ']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:or (extension does istif)
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'âx80x94', 'Load the images by matching files in all folders against the text pattern âx80x98GFPHistoneâx80x99.']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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:phase
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', 'âx80x94', 'Group the analysis by the âx80x98Runâx80x99 metadata so that each folder is analyzed separately. ']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:C

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:phase
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):20,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:0
    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.0001
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
MeasureObjectSizeShape:[module_num:6|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notes:['Measures the shape parameters of the cells after segmentation by Cellpose']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
    Select object sets to measure:IdentifyPrimaryObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:7|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
    Select the objects to filter:IdentifyPrimaryObjects
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:250
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:8|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
    Select object sets to measure:FilterObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

TrackObjects:[module_num:9|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notes:['Tracks the cells across images using the Linear Assignment Problem (LAP) method. A second phase is used to determine splitting events: when one cell becomes two....or division.']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
    Choose a tracking method:LAP
    Select the objects to track:FilterObjects
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    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:cells_tracked
    Select the movement model:Both
    Number of standard deviations for search radius:3.0
    Search radius limit, in pixel units (Min,Max):30,50
    Run the second phase of the LAP algorithm?:Yes
    Gap closing cost:10
    Split alternative cost:1000
    Merge alternative cost:40
    Maximum gap displacement, in pixel units:50
    Maximum split score:500
    Maximum merge score:50
    Maximum temporal gap, in frames:1
    Filter objects by lifetime?:No
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    Mitosis alternative cost:80
    Maximum mitosis distance, in pixel units:40
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
OverlayOutlines:[module_num:10|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notes:['Overlay the outlines of what Cellpose segmented on to the original phase contrast image. This allows for easy viewing of segmentation quality.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:phase
    Name the output image:segmentation
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FF0080
    Select objects to display:FilterObjects

SaveImages:[module_num:11|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notes:['']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
    Select the type of image to save:Movie/Stack
    Select the image to save:segmentation
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:overlay
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\Omnipose Pipeline\\Omnipose Analysis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    How to save the series:T (Time)
    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:12|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the embryo objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\Omnipose Pipeline\\Omnipose Analysis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:FilterObjects|AreaShape_MeanRadius,FilterObjects|AreaShape_MaximumRadius,FilterObjects|AreaShape_Zernike_7_1,FilterObjects|AreaShape_Zernike_7_5,FilterObjects|AreaShape_Zernike_7_7,FilterObjects|AreaShape_Zernike_7_3,FilterObjects|AreaShape_Zernike_9_9,FilterObjects|AreaShape_Zernike_9_5,FilterObjects|AreaShape_Zernike_9_1,FilterObjects|AreaShape_Zernike_9_3,FilterObjects|AreaShape_Zernike_9_7,FilterObjects|AreaShape_Zernike_8_0,FilterObjects|AreaShape_Zernike_8_2,FilterObjects|AreaShape_Zernike_8_6,FilterObjects|AreaShape_Zernike_8_4,FilterObjects|AreaShape_Zernike_8_8,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
ExportToDatabase:[module_num:13|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:halA_1
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:halA_1.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:halA_1
    Which objects should be used for locations?:FilterObjects
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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